PsychoPy2experiment version="3.0.1"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  expName = untitled
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Routines
  Routine rand
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # Add to Counters
        blockCounter=blockCounter+1

        #Open the xlsx stimuli file and select the first sheet
        inbook = xlrd.open_workbook(infile)
        insheet = inbook.sheet_by_index(0)
        MaleImages = insheet.col_values(0)
        FemaleImages = insheet.col_values(1)
        IndoorImages = insheet.col_values(2)
        OutdoorImages = insheet.col_values(3)
        Image1 = insheet.col_values(4)
        Image2 = insheet.col_values(5)
        ImageList1 = insheet.col_values(6)
        ImageList2 = insheet.col_values(7)
        ImageList3 = insheet.col_values(8)
        ImageList4 = insheet.col_values(9)



        # Male Stimuli
        str1=ImageList1[0]
        idx1 = str1.split(":")
        idxFirst1 = int(idx1[0])
        idxLast1 = int(idx1[1])

        # Female stimuli
        str2=ImageList2[0]
        idx2 = str2.split(":")
        idxFirst2 = int(idx2[0])
        idxLast2 = int(idx2[1])


        # Indoor Stimuli
        str3=ImageList3[0]
        idx3 = str3.split(":")
        idxFirst3 = int(idx3[0])
        idxLast3 = int(idx3[1])

        # Outdoor stimuli
        str4=ImageList4[0]
        idx4 = str4.split(":")
        idxFirst4 = int(idx4[0])
        idxLast4 = int(idx4[1])

        imMale=MaleImages[idxFirst1:idxLast1]
        imFemale=FemaleImages[idxFirst2:idxLast2]
        imIndoor=IndoorImages[idxFirst3:idxLast3]
        imOutdoor=OutdoorImages[idxFirst4:idxLast4]


        Range1 = list(range(idxLast1))
        Range2 = list(range(idxLast2))
        Range3 = list(range(idxLast3))
        Range4 = list(range(idxLast4))

        #Shuffling
        random.shuffle(Range1)
        random.shuffle(Range2)
        random.shuffle(Range3)
        random.shuffle(Range4)


        #Select images
        numType1=int(num_trials/2)
        numType2=num_trials-numType1
        list1 = Range1[0:(numType1+1)]
        selectedImages1 = [imMale[i] for i in list1]
        list2 = Range2[0:(numType2+1)]
        selectedImages2 = [imFemale[i] for i in list2]
        list3 = Range3[0:(numType1+1)]
        selectedImages3 = [imIndoor[i] for i in list3]
        list4 = Range4[0:(numType2+1)]
        selectedImages4 = [imOutdoor[i] for i in list4]


        #Shuffle subcategories
        Face=selectedImages1 + selectedImages2
        random.shuffle(Face)
        Scene=selectedImages3 + selectedImages4
        random.shuffle(Scene)


        # Convert to grayscale
        Face = [Image.open(Face[i]).convert('LA') for i in range(len(Face))]
        Scene = [Image.open(Scene[i]).convert('LA') for i in range(len(Scene))]

        #if ((blockCounter==1) or (blockCounter==4) or (blockCounter==7) or (blockCounter==8)):
        #    im1=MaleImages[idxFirst1:idxLast1]
        #    im2=FemaleImages[idxFirst2:idxLast2]
        #elif ((blockCounter==2) or (blockCounter==3) or (blockCounter==5) or (blockCounter==6)):
        #    im1=IndoorImages[idxFirst1:idxLast1]
        #    im2=OutdoorImages[idxFirst2:idxLast2]


        # Randomize the inter-trial duration
        ITR = list(range(2000,3000,10))
        #ITR = [ITR[i]/1000 for i in range(len(ITR))]

        ITR = [i/1000 for i in ITR]
        random.shuffle(ITR)
  Routine end
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your participation!
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('e')
      End Routine:
        child.sendline('\r')
  Routine description
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent descriptionText
      letterHeight = 0.12
      startVal [time (s)] = 0.0
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      text:
        Please determine whether the Male or Female image is shown

        Press '`' on the left corner of keyboard if it is a 'Male' face


        Press '-' on the right corner of keyboard if it is a 'Female' face
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initVariables
    CodeComponent code
      Code Type = Py
      Begin Routine:
        trial_A = Image[trial_range[counter]]

        thisExp.addData('trialNum',counter)
        thisExp.addData('order', trial_range[counter])


        inter_trial_wait=float(inter_trial_time[counter])/100

        counter= counter + 1
  Routine waitRand
    PolygonComponent interTrialScreen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITR[trialCounter]
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    PolygonComponent whiteScreen_2
      fillColor = $[1,1,1]
      shape = rectangle
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITR[trialCounter]
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    TextComponent interTrialText
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITR[trialCounter]
      text [set every repeat] = +
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  Routine init
    CodeComponent InitCode
      Code Type = Py
      Begin Experiment:
        # Add random and excel library
        import random, xlrd, os, sys
        from PIL import Image

        #sys.path.append('./lib/')

        # Open LabRecorder
        #os.startfile(".\lib\LabRecorder\LabRecorder.exe")




        # Add lsl keypress markers
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='Keyboard', type='Markers', channel_count=1,
                          channel_format='string', source_id='Keyboard')
        # Initialize the keyboard stream.
        outlet = StreamOutlet(info)



        currentTime = expInfo['date']
        subjectID = expInfo['participant']
        Labrecorder = '.\lib\LabRecorder\LabRecorderCLI.exe'
        Dataset='.\Dataset'

        # Open LabRecorder
        import subprocess, sys, os, winpexpect, time
        #os.system("start /B start cmd.exe @cmd /k .\lib\LabRecorder\LabRecorderCLI.exe .\Dataset\'currentTime'.xdf 'type=EEG'")
        #os.system("start /B start cmd.exe @cmd /k %s %s\%s_%s 'type=EEG'" % (Labrecorder, Dataset, currentTime,subjectID))
        child =  winpexpect.winspawn('%s %s\%s_%s \'name="Keyboard"\'' % (Labrecorder,Dataset,currentTime,subjectID))





        # Fix random seed
        random.seed()

        # Read stimuli excel file
        infile = './listStim.xlsx'

        # Number of stimuli and number of blocks
        num_trials = 10
        num_blocks = 8

        trialCounter=0
        blockCounter=0

        # Duration of a trial
        trialDuration = 1


        # Size of picture
        pictureSize=[1.5,1.5]
  Routine trialStimuli
    CodeComponent rand_2
      Code Type = Py
      Begin Routine:
        trialCounter=trialCounter+1
    PolygonComponent TrialScreen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = [2,2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialDuration
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    ImageComponent trialImage1
      color [set every repeat] = white
      image [set every repeat] = $Face[trialCounter]
      opacity [set every repeat] = 1
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialDuration
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    ImageComponent trialImage2
      image [set every repeat] = $Scene[trialCounter]
      opacity = 0.5
      size [set every repeat] = $pictureSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialDuration
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    TextComponent trialLeftText
      letterHeight = 0.1
      ori = 270
      pos = (-0.8, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialDuration
      text [set every repeat] = $leftLabel
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    TextComponent trialRightText
      letterHeight = 0.1
      ori = 90
      pos = (0.8, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialDuration
      text [set every repeat] = $rightLabel
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    KeyboardComponent keyPressTrial
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trialDuration
      store = first key
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    CodeComponent trialAction
      Code Type = Py
      Begin Routine:
        # Send trial onset marker to LSL
        outlet.push_sample('t')
        PressedYet = 0
      Each Frame:
        # Send trial onset marker to LSL
        if ((keyPressTrial.keys) and (not PressedYet)):
            outlet.push_sample(str(keyPressTrial.keys)[0])
            PressedYet = 1
            print(str(keyPressTrial.keys))
  Routine startWait3000
    PolygonComponent preTrialScreen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent preTrialText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent startMarker
      Code Type = Py
      Begin Routine:
        # Send experiment onset marker to LSL
        outlet.push_sample('S')
  Routine initLoop
    CodeComponent LoopCode
      Code Type = Py
      Begin Experiment:
        trial_range = list(range(num_rows))
        random.shuffle(trial_range) #shuffling all the

        inter_trial_time = list(range(1000,1500))
        random.shuffle(inter_trial_time)
        counter = 0
      Begin Routine:
        trial_A = A[trial_range[counter]]
        trial_X = X[trial_range[counter]]

        thisExp.addData('trialNum',counter)
        thisExp.addData('order', trial_range[counter])
        thisExp.addData('A(B)_X(Y)', AX_BY[trial_range[counter]])
        thisExp.addData('corr_key', corr_key[trial_range[counter]])


        inter_stim_wait=float(inter_stim_time[counter])/100
        inter_trial_wait=float(inter_trial_time[counter])/100




        counter= counter + 1
  Routine interBlock
    PolygonComponent interBlockScreen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent interBlockText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent keyPressNextBlock
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent interBlockMarker
      Code Type = Py
      Begin Routine:
        outlet.push_sample('E')

        # Reset counter of trials
        trialCounter=0
  Routine randomize
    CodeComponent randomization
      Code Type = Py
      Begin Routine:
        #trial = Image[trial_range[counter]]
        #trialStim=Stim[trial_range[counter]]
        #trialStim1=Stim1[trial_range[counter]]
        #trialStim2=Stim2[trial_range[counter]]

        #thisExp.addData('trialNum',counter)
        #thisExp.addData('order', trial_range[counter])




        # Print inter-trial duration
        #print(inter_trial_wait)
  Routine instructions
    PolygonComponent instructionScreen
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent instructionText
      letterHeight = 0.1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
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      text:
        Please make sure the lab recorder is up and running.

        Select the 'Keyboard' and 'EEG' stream to be recorded, navigate to a folder and push 'Start' button on the labRecorder.
    KeyboardComponent keyPressRun
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dir
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        leftLabel = Image1[blockCounter-1]
        rightLabel = Image2[blockCounter-1]

        #print(leftDirection + " " + rightDirection)


        dirString = "Press ` for " + leftLabel
        dirString += "\n\nPress - for " + rightLabel

        #text_2.setText(
        #"Press '`' on the left corner of keyboard for "
        #+ leftDirection
        #+ "\n Press '-' on the right corner of keyboard for "
        #+ rightDirection)
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $dirString
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Flow
  Routine init
  Routine description
  Routine instructions
  Routine startWait3000
  LoopInitiator BlockListIteration loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = num_blocks
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    Routine rand
    Routine dir
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = num_trials
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      Routine trialStimuli
      Routine waitRand
    LoopTerminator trials
    Routine interBlock
  LoopTerminator BlockListIteration
  Routine end
